PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  color = $[1.0,1.0,1.0]
  expName = ScientificJudgements1
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Routines
  Routine SlowInstr
    TextComponent SlowInstrText
      color = $[-1.0000, -1.0000, -1.0000]
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      text [set every repeat] = $SlowInstructions
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    KeyboardComponent SlowInstrKey
      allowedKeys = 'e'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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  Routine FastInstr
    TextComponent Instr1
      color = $[-1.0000, -1.0000, -1.0000]
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      text [set every repeat] = $FastInstructions
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    KeyboardComponent INSTRESP
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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  Routine FastTrial
    PolygonComponent fixcross
      fillColor = $[-1.0000, -1.0000, -1.0000]
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextComponent Fasttext
      color = $[-1.0000, -1.0000, -1.0000]
      letterHeight = 0.05
      startVal [time (s)] = 1
      stopVal [duration (s)] = 5
      text [set every repeat] = $Statement
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    KeyboardComponent key_resp
      allowedKeys = 'f','j'
      correctAns = $Correct
      forceEndRoutine = True
      startVal [time (s)] = 1
      stopVal [duration (s)] = 5
      storeCorrect = True
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    SoundComponent Timer
      sound = A
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 0.2
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        myCount = 0
      Begin Routine:
        myCount = myCount + 1
        if myCount > 80:
            FastLoop.finished = True
    TextComponent TRUE
      color = $[-1.0000, -1.0000, -1.0000]
      letterHeight = 0.06
      pos = (-.5, .3)
      saveStartStop = False
      startVal [time (s)] = 0.05
      stopVal [duration (s)] = 6
      text = F=TRUE
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    TextComponent FALSE
      color = $[-1.0000, -1.0000, -1.0000]
      letterHeight = 0.06
      pos = (.5, .3)
      saveStartStop = False
      startVal [time (s)] = 0.05
      stopVal [duration (s)] = 6
      text = J=FALSE
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  Routine SlowTrial
    PolygonComponent polygon
      fillColor = $[-1.0000, -1.0000, -1.0000]
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextComponent SlowText
      color = $[-1.0000, -1.0000, -1.0000]
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      text [set every repeat] = $Statement
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    KeyboardComponent SlowKey
      allowedKeys = 'e','i'
      correctAns = $Correct
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine EndStudy
    TextComponent EndStudyText
      color = $[-1.0000, -1.0000, -1.0000]
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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      text:
        Thank you for completing this study. Please enter the following unique code into Qualtrics to prove you have completed the study:

        CAT123

        Press Space to finish study and wait for message “thank you for your patience” to press ‘ok’ and return to qualtrics
    KeyboardComponent endstudykey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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  Routine Mouse
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        win.mouseVisible = True
      End Routine:
        win.mouseVisible = False
  Routine FastPractice
    PolygonComponent fixcross1
      fillColor = $[-1.0000, -1.0000, -1.0000]
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextComponent PracticeText
      color = $[-1.0000, -1.0000, -1.0000]
      letterHeight = 0.05
      startVal [time (s)] = 1
      stopVal [duration (s)] = 5
      text [set every repeat] = $practicetext
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    KeyboardComponent key_resp_2
      allowedKeys = 'f','j'
      correctAns = $practicecorrect
      forceEndRoutine = True
      startVal [time (s)] = 1
      stopVal [duration (s)] = 5
      storeCorrect = True
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    SoundComponent scaretone
      sound = A
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 0.2
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    TextComponent FTrue
      color = $[-1.0000, -1.0000, -1.0000]
      letterHeight = 0.06
      pos = (-.5, .3)
      saveStartStop = False
      startVal [time (s)] = 0.05
      stopVal [duration (s)] = 6
      text = F=TRUE
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    TextComponent JFALSE
      color = $[-1.0000, -1.0000, -1.0000]
      letterHeight = 0.06
      pos = (.5,.3)
      startVal [time (s)] = 0.05
      stopVal [duration (s)] = 6
      text = J=FALSE
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  Routine PracticeEnd
    TextComponent text
      color = $[-1.0000, -1.0000, -1.0000]
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        You have finished the trial period. You will now complete the official task. Judge the following statements as quickly as you can without sacrificing accuracy.

        Press ‘F’ if the statement is true and ‘J’ if the statement is false.

        Press SPACE to continue
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 7.0
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  Routine Advance
    TextComponent Continue
      color = $[-1.0000, -1.0000, -1.0000]
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Press Space to Continue
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    KeyboardComponent Advance_Resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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  Routine Encouragement
    TextComponent EncourageText
      color = $[-1.000,-1.000,-1.000]
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 13
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      text:
        Woah-oh! You’re Halfway There!
        Keep it Up!

        Press Space to Continue
    KeyboardComponent encouragekey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 10
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    CodeComponent code
      Code Type = Auto->JS
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      Each Frame:
        if FastLoop.thisN != 40:
            continueRoutine = False
  Routine text_2
    TextComponent text_3
      color = $[-1.000,-1.000,-1.000]
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Testing if experiment is uploading?
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Mouse
  LoopInitiator Instrloop loopType="TrialHandler"
    conditionsFile = SpeededInstructionsSheet.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'FastInstructions': 'You will be shown a total of 160 statements pertaining to mathematics, science, and social concepts. Your task is to determine whether each statement is true or false as quickly as possible without sacrificing accuracy. Some statements will be difficult and some will be easier.  We do not expect you to know the correct answer for all 160 statements.  Press E to Continue'},
      {'FastInstructions': 'Each statement will appear on your screen for 5 seconds and you will have those 5 seconds to decide if it is true or false before the next statement appears. There will be a beep to inform you that you have 2 seconds remaining. If you do not respond, that answer will be considered incorrect and the task will move on to the next statement. Press E to continue'},
      {'FastInstructions': 'If the statement is true, you will press the “E” key on your keyboard with your left pointer finger; if the statement is false, you will press the “I” key on your keyboard with your right pointer finger. Press E to continue'},
      {'FastInstructions': 'Prior to completing the study, you will complete 10 practice trials to familiarize yourself with the task. Your performance on these trials will determine your participation in the following study. '},
      {'FastInstructions': 'If the statement is true, press the “E” key on your keyboard with your left pointer finger; if the statement is false, press the “I” key on your keyboard with your right pointer finger. Press E to continue'}]
    Routine FastInstr
  LoopTerminator Instrloop
  LoopInitiator Practice loopType="TrialHandler"
    conditionsFile = InfinityThesisPracticeFast.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'practicetext': 'A circle is a shape', 'practicecorrect': 'e'},
      {'practicetext': 'Dinosaurs are extinct', 'practicecorrect': 'e'},
      {'practicetext': 'Magenta is a color', 'practicecorrect': 'e'},
      {'practicetext': 'A clock is used to tell time', 'practicecorrect': 'e'},
      {'practicetext': 'Humans cannot breathe water', 'practicecorrect': 'e'},
      {'practicetext': 'A truck is an animal', 'practicecorrect': 'i'},
      {'practicetext': 'Jupiter is the planet we live on', 'practicecorrect': 'i'},
      {'practicetext': 'The Earth is a star', 'practicecorrect': 'i'},
      {'practicetext': 'Mississippi is a country', 'practicecorrect': 'i'},
      {'practicetext': 'Humans cannot eat food', 'practicecorrect': 'i'}]
    Routine FastPractice
    Routine Advance
  LoopTerminator Practice
  Routine PracticeEnd
  LoopInitiator FastLoop loopType="TrialHandler"
    conditionsFile = InfinityThesisStimuliFAST.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Statement': 'A minute is finite', 'Correct': 'f'},
      {'Statement': 'A minute is infinite', 'Correct': 'j'},
      {'Statement': 'A minute has an end', 'Correct': 'f'},
      {'Statement': 'A minute is endless', 'Correct': 'j'},
      {'Statement': 'A minute cannot go on forever', 'Correct': 'f'},
      {'Statement': 'A minute can go on forever', 'Correct': 'j'},
      {'Statement': 'A minute cannot be further divided', 'Correct': 'j'},
      {'Statement': 'A minute can be further divided', 'Correct': 'f'},
      {'Statement': 'An inch is finite', 'Correct': 'f'},
      {'Statement': 'An inch is infinite', 'Correct': 'j'},
      {'Statement': 'An inch has an end', 'Correct': 'f'},
      {'Statement': 'An inch is endless', 'Correct': 'j'},
      {'Statement': 'An inch cannot go on forever', 'Correct': 'f'},
      {'Statement': 'An inch can go on forever', 'Correct': 'j'},
      {'Statement': 'An inch cannot be further divided', 'Correct': 'j'},
      {'Statement': 'An inch can be further divided', 'Correct': 'f'},
      {'Statement': 'Intervals of time can be finite', 'Correct': 'f'},
      {'Statement': 'Intervals of time can be infinite', 'Correct': 'f'},
      {'Statement': 'Intervals of time can have an end', 'Correct': 'f'},
      {'Statement': 'Intervals of time can be endless', 'Correct': 'f'},
      {'Statement': 'Intervals of time cannot go on forever', 'Correct': 'f'},
      {'Statement': 'Intervals of time can go on forever', 'Correct': 'f'},
      {'Statement': 'Intervals of time cannot be further divided', 'Correct': 'f'},
      {'Statement': 'Intervals of time can be further divided', 'Correct': 'f'}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
    Routine FastTrial
    Routine Encouragement
    Routine Advance
  LoopTerminator FastLoop
  Routine EndStudy
