PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = demographics?
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Routines
  Routine trial
    CodeComponent code_2
      Code Type = JS
      Begin JS Experiment:
        {
            "display": "form",
            "settings": {
                "pdf": {
                    "id": "1ec0f8ee-6685-5d98-a847-26f67b67d6f0",
                    "src": "https://files.form.io/pdf/5692b91fd1028f01000407e3/file/1ec0f8ee-6685-5d98-a847-26f67b67d6f0"
                }
            },
            "components": [
                {
                    "label": "What is your age? ",
                    "tableView": true,
                    "data": {
                        "values": [
                            {
                                "label": "18-24",
                                "value": "1"
                            },
                            {
                                "label": "25-34",
                                "value": "2"
                            },
                            {
                                "label": "35-44",
                                "value": "3"
                            },
                            {
                                "label": "45-54",
                                "value": "4"
                            },
                            {
                                "label": "55+",
                                "value": "5"
                            },
                            {
                                "label": "Prefer not to say",
                                "value": "0"
                            }
                        ]
                    },
                    "key": "whatIsYourAge",
                    "type": "select",
                    "input": true
                },
                {
                    "type": "button",
                    "label": "Submit",
                    "key": "submit",
                    "disableOnInvalid": true,
                    "input": true,
                    "tableView": false
                }
            ]
        }
Flow
  Routine trial
